PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = numerosity
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    StaticComponent Start
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent Stimulus
      stopVal [duration (s)] = 10
      startEstim = 0.5
      startVal [time (s)] = 0.5
      image [set every repeat] = $file
      size = [1.7, 1.7]
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    KeyboardComponent Response
      correctAns = $correct
      storeCorrect = True
      forceEndRoutine = True
      startEstim = 0.5
      allowedKeys = 'left','right','down'
      startVal [time (s)] = 0.5
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Flow
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = ../../../final/conditions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'n1': 56, 'n2': 56, 'correct': 'down', 'file': '/Users/dhruv13/Desktop/final/im29.png'},
      {'n1': 14, 'n2': 11, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im4.png'},
      {'n1': 118, 'n2': 124, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im65.png'},
      {'n1': 71, 'n2': 77, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im35.png'},
      {'n1': 9, 'n2': 8, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im2.png'},
      {'n1': 24, 'n2': 24, 'correct': 'down', 'file': '/Users/dhruv13/Desktop/final/im11.png'},
      {'n1': 111, 'n2': 100, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im55.png'},
      {'n1': 26, 'n2': 21, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im10.png'},
      {'n1': 118, 'n2': 125, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im66.png'},
      {'n1': 128, 'n2': 118, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im69.png'},
      {'n1': 112, 'n2': 113, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im60.png'},
      {'n1': 226, 'n2': 209, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im76.png'},
      {'n1': 90, 'n2': 96, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im50.png'},
      {'n1': 263, 'n2': 244, 'correct': 'left', 'file': '/Users/dhruv13/Desktop/final/im78.png'},
      {'n1': 118, 'n2': 127, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im68.png'},
      {'n1': 100, 'n2': 114, 'correct': 'right', 'file': '/Users/dhruv13/Desktop/final/im43.png'}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
    Routine trial
  LoopTerminator Trials
